begintemplate BursterCa

public soma, type, connect2target

create soma[1]
public all
objref all
objref this

strdef type

proc init() {
	
	type = "BursterCa"

	all = new SectionList()
	for i=0,0 soma[0] {
		all.append()
	}

	soma[0] {
		nseg = 1 
		L = 1000
		diam = 9.99593
	}
	
	soma[0] {
		cm = 8.91436940e-01

		insert leak
		eleak = 52.14456
		gbar_leak = 3.029328e-5

		insert na
		ena = 50
		gbar_na = 1.42965e-1

		insert kdr
		ek = -80
		gbar_kdr = 1.02829e-1

		insert capool
		cao = 3
		cai = 50e-6
		tauca_capool = 100
		fca_capool = 1

		insert cas
		gbar_cas = 8.493705e-3

        insert ka
		gbar_ka = 1.601638e-1

        insert kca
		gbar_kca = 0.02

        insert cat
		gbar_cat = 5.825718e-3

	}
}

endtemplate BursterCa