/*--------------------------------------------------------------
	TEMPLATE FILE FOR REGULAR-SPIKING CORTICAL PYRAMIDAL CELL
	---------------------------------------------------------

	One compartment model and currents derived from:

   Pospischil, M., Toledo-Rodriguez, M., Monier, C., Piwkowska, Z., 
   Bal, T., Fregnac, Y., Markram, H. and Destexhe, A.
   Minimal Hodgkin-Huxley type models for different classes of
   cortical and thalamic neurons.
   Biological Cybernetics 99: 427-441, 2008.

	This model was inspired from:

   McCormick, D.A., Wang, Z. and Huguenard, J. Neurotransmitter 
   control of neocortical neuronal activity and excitability. 
   Cerebral Cortex 3: 387-398, 1993.

	- one compartment model
	- passive
	- HH: Traub
	- IM: m format

	Alain Destexhe, CNRS, 2008

--------------------------------------------------------------*/

begintemplate sPY		// create a new template object
public soma

create soma[1]
public all
objref all
objref this

proc init() { local v_potassium, v_sodium

  all = new SectionList()
	for i=0,0 soma[0] {
		all.append()
	}

  v_potassium = -100		// potassium reversal potential 
  v_sodium = 50			// sodium reversal potential 

  soma[0] {
	Ra = 100		// geometry 
	nseg = 1
	diam = 96
	L = 96			// so that area is about 29000 um2
	cm = 1

	insert pas		// leak current 
	e_pas = -70
	g_pas = 1.4998139e-05 // #ACT_MARK: g_leak

	// conversion with McC units: 
	// g(S/cm2) = g(nS)*1e-9/29000e-8
	//	    = g(nS) * 3.45e-6

	insert hh2		// Hodgin-Huxley INa and IK 
	ek = v_potassium
	ena = v_sodium
	vtraub_hh2 = -55	// Resting Vm, BJ was -55
	gnabar_hh2 = 0.08155758 // #ACT_MARK: g_Na
	gkbar_hh2 = 0.0056799036 // #ACT_MARK: g_Kdr


	insert im		// M current 
	taumax_im = 1000
	gkbar_im = 0.0002 // #ACT_MARK: g_KM
  }

}
endtemplate sPY



